PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = SW EEG collection
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Tap spacebar to continue
    KeyboardComponent welcome_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent end_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Thank you!

        This is the end of the experiment.
  Routine intro
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    TextComponent intro_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Study!

        In this experiment, we’ll first collect your resting-state EEG data for 30 seconds. This means you’ll relax and let us record your brain activity.

        Please adjust to a comfortable position.

        We will now begin collecting your resting-state EEG data.

        When you're ready, press the spacebar to start.
    KeyboardComponent intro_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine resting_state_EEG
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    PolygonComponent cross_sign
      durationEstim = 30
      fillColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30.0
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  Routine resting_state_end
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    TextComponent resting_state_end_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This is the end of resting-state EEG collection.

        Next we will begin ERP data collection.

        Here’s what will happen in each section of the study:

        Preparation Time: You will see a cross on the screen for 6 seconds. Use this time to relax.

        Picture Viewing: A picture will then appear for 4 seconds. Please remain still and avoid eye blinking or body movement during this time.

        Report: After viewing the picture, you will indicate whether you like the content of the picture or not.

        Please adjust to a comfortable position.

        When you're ready, press the spacebar to start.
    KeyboardComponent resting_state_end_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_2
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    PolygonComponent cross_sign_2
      durationEstim = 6
      fillColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6.0
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  Routine huangshan
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    ImageComponent huangshan_image
      durationEstim = 4
      image = images/eaaedf0b69306fdc1bd42256840db8e5.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine questionnaire_1
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    TextComponent questionnaire_1_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Do you like this tourist attraction?
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    ButtonComponent like_button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 0.9451, 0.7255
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (-0.2, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Yes
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    ButtonComponent dislike_button
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 0.9451, 0.7255
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.2, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = No
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  Routine huangshan_souvenir
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    ImageComponent huangshan_souvenir_image
      durationEstim = 4
      image = images/1485282ca2d63b758886ce8466043d65.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine questionnaire_2
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    TextComponent questionnaire_2_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text = Do you like this souvenir?
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    ButtonComponent like_button_2
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 0.9451, 0.7255
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (-0.2, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = Yes
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    ButtonComponent dislike_button_2
      bold = True
      color = -1.0000, -1.0000, -1.0000
      fillColor = 1.0000, 0.9451, 0.7255
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.2, -0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = No
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  Routine forbidden_city
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    ImageComponent forbidden_city_image
      durationEstim = 4
      image = images/forbidden city.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine forbidden_city_souvenir
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    ImageComponent forbidden_city_souvenir_image
      durationEstim = 4
      image = images/97843262-3039-42cc-a201-af4397613a97.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine suzhou
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    ImageComponent suzhou_image
      durationEstim = 4
      image = images/477db1189aa76e7022194d8065e80485.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine suzhou_souvenir
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    ImageComponent suzhou_souvenir_image
      durationEstim = 4
      image = images/99f97ea5b779197516a424e547976194.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine shanghai
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    ImageComponent shanghai_image
      durationEstim = 4
      image = images/fcaa1942084bc229c72c771a1d5a270c.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine shanghai_souvenir
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    ImageComponent shanghai_souvenir_image
      durationEstim = 4
      image = images/b56a2466c626aeabd9b381fd66b76cfe.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine xian
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    ImageComponent xian_image
      durationEstim = 4
      image = images/bingmayong.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine xian_souvenir
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    ImageComponent xian_souvenir_image
      durationEstim = 4
      image = images/image_with_white_bg.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine hangzhou
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    ImageComponent hangzhou_image
      durationEstim = 4
      image = images/a8650f88a45d59c3a8c8acb1d6665ea8.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine hangzhou_souvenir
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    ImageComponent hangzhou_souvenir_image
      durationEstim = 4
      image = images/74c728ba857071a6af0503895941752e.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine shandong
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    ImageComponent shangdong_image
      durationEstim = 4
      image = images/cb160d03e8dba34ce6fcf103fcbd2875.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine shangdong_souvenir
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    ImageComponent shandong_souvenir_image
      durationEstim = 4
      image = images/d87dd0f681f4d1a291e2f640f5b557d5.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine tiantan
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    ImageComponent tiantan_image
      durationEstim = 4
      image = images/340305d5d74a664595902b651040a220.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine tiantan_souvenir
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    ImageComponent tiantan_souvenir_image
      durationEstim = 4
      image = images/ff7bf711346910a1fa54c003a366447b.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine xizang
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    ImageComponent xizang_image
      durationEstim = 4
      image = images/Potala_palace23.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine xizang_souvenir
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    ImageComponent xizang_souvenir_image
      durationEstim = 4
      image = images/5033ef553f6acfcc5efb25106fa20496.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine great_wall
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    ImageComponent great_wall_image
      durationEstim = 4
      image = images/great_wall.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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  Routine great_wall_souvenir
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    ImageComponent great_wall_souvenir_image
      durationEstim = 4
      image = images/Great Wall product.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4.0
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Flow
  Routine welcome
  Routine intro
  Routine resting_state_EEG
  Routine resting_state_end
  Routine break_2
  Routine huangshan
  Routine questionnaire_1
  Routine break_2
  Routine huangshan_souvenir
  Routine questionnaire_2
  Routine break_2
  Routine forbidden_city
  Routine questionnaire_1
  Routine break_2
  Routine forbidden_city_souvenir
  Routine questionnaire_2
  Routine break_2
  Routine suzhou
  Routine questionnaire_1
  Routine break_2
  Routine suzhou_souvenir
  Routine questionnaire_2
  Routine break_2
  Routine shanghai
  Routine questionnaire_1
  Routine break_2
  Routine shanghai_souvenir
  Routine questionnaire_2
  Routine break_2
  Routine xian
  Routine questionnaire_1
  Routine break_2
  Routine xian_souvenir
  Routine questionnaire_2
  Routine break_2
  Routine hangzhou
  Routine questionnaire_1
  Routine break_2
  Routine hangzhou_souvenir
  Routine questionnaire_2
  Routine break_2
  Routine shandong
  Routine questionnaire_1
  Routine break_2
  Routine shangdong_souvenir
  Routine questionnaire_2
  Routine break_2
  Routine tiantan
  Routine questionnaire_1
  Routine break_2
  Routine tiantan_souvenir
  Routine questionnaire_2
  Routine break_2
  Routine xizang
  Routine questionnaire_1
  Routine break_2
  Routine xizang_souvenir
  Routine questionnaire_2
  Routine break_2
  Routine great_wall
  Routine questionnaire_1
  Routine break_2
  Routine great_wall_souvenir
  Routine questionnaire_2
  Routine end
